PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':'03'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  color = black
  expName = Matching
  logging level = warning
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        from numpy.random import exponential as randexp
      Begin Routine:
        corrAns = []
        baitL = baitL if baitL else random()<pL
        baitR = baitR if baitR else random()<pR
        if baitL:
            corrAns.append('left')
        if baitR:
            corrAns.append('right')
    TextComponent fixate
      color = $[1, 1, 1]
      letterHeight = 2
      startVal [time (s)] = 0
      text = Cast rod
      units = cm
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    TextComponent optionR
      letterHeight = 0.1
      pos = (.5, 0)
      startVal [time (s)] = .1
      text = R
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    TextComponent optionL
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = .1
      text = L
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = .1
      stopVal [duration (s)] = 7.0
      store = first key
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  Routine instrPractice
    TextComponent instruct1
      disabled = True
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with a large letter made up of smaller letters. Your task is to

        Respond by pressing;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        There will be a number of practice trials in which you will be given feedback.

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from matplotlib import pyplot
        import pandas as pd
      Begin Routine:
        def plotYX(yaxis, xaxis, description=''):
            pyplot.grid(True)
            pyplot.title(description)
            #pyplot.xlabel('Angle')
            #pyplot.ylabel('Response time (s)')
            #pyplot.xlim([0, 315])
            #slope,inter = np.polyfit(xaxis[:5],yaxis[:5],1)
            pyplot.plot(xaxis, yaxis) #, xaxis[:5], np.array(xaxis[:5]) * slope + inter)
            pyplot.draw()
            pyplot.show()

        print('Plotting now.')
        #print("  0  45  90  135 180 225 270 315")

        plotYX(np.ones(5),np.arange(5))
  Routine instrMain
    TextComponent instr2
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_feedback
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.keys in corrAns:#stored on last run routine
          msg="Fish!"
          if resp.keys == 'left':
            baitL = False
          if resp.keys == 'right':
            baitR = False
        else:
          msg="Nothing."
      End Routine:
        feedbackDelay = 0
        #while feedbackDelay < feedbackDelayMin or feedbackDelay > feedbackDelayMax:
        #    print('\t',randexp(feedbackDelayMean))
        #print(feedbackDelay)

        plt.grid(True)
        plt.plot(np.arange(5),np.ones(5))
        #plt.hist(randexp(feedbackDelayMean))
        plt.draw()
        plt.show()
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine thanks
    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You're done! Fun, wasn't it!? ;-)
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  Routine varsBlock
    CodeComponent code_varsBlock
      Code Type = Py
      Begin Routine:
        leftHi = not(leftHi)

        pL = pHi if leftHi else pLo
        pR = pLo if leftHi else pHi
  Routine varsInit
    CodeComponent code_varsInit
      Code Type = Py
      Begin Experiment:
        baitL = True
        baitR = True
        pHi = 0.4
        pLo = 0.1
        leftHi = random() > 0.5
        feedbackDelayMin = 0.5
        feedbackDelayMax = 8
        feedbackDelayMean = 1.5
Flow
  Routine instrPractice
  Routine varsInit
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine varsBlock
    LoopInitiator trials loopType="TrialHandler"
      endPoints = [1, 2]
      loopType = random
      nReps = 100
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      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
